// created by Dan Rozelle 20091005
//used to quickly open each DV movie, and wait to do some simple manual function or paste another macro as a function



macro "_DKR_Batch_DV_Movies"{

//list auto functions here, adjust mode as necessary
function batchfunction();
mode="AUTO";  //use "MANUAL" or "AUTO" or "BOTH"

if(nImages>0) exit ("close all images before proceeding");


dir1 = getDirectory("Choose source directory");
if (dir1=="")
      exit("No directory available");

//get a list of all the files in this folder 
preList = getFileList(dir1);
size=0;

//include only certain filetypes
	filter="tif";
	

//count each '*filter*' files
for(place=0;place<preList.length;place++){
	if(endsWith(preList[place],filter)){
		size++;
	}
}
//create a new array and populate with filtered images
list=newArray(size);
position=0;
for(place=0;place<preList.length;place++){
	if(endsWith(preList[place],filter)){
		list[position]=preList[place];
		position++;
		}
	}



//starting with the first image, we increment through each image until we have done 6, or finish our list, whichever comes first
  for(i=0; i<list.length; i++) {
	//open a two color image in separate channel stacks
	run("Bio-Formats Importer", "open="+dir1+list[i]+" view=Hyperstack stack_order=XYCZT");

	if(mode=="MANUAL"){
		wait(100);
		run("Install...", "install=C:\\ImageJ\\macros\\_DKR_AutoScaleBrightestSlice.txt");
		waitForUser("click OK \nto proceed"); 
		}
	
	else if(mode=="AUTO"){
		selectWindow(list[i]);
		batchfunction();
		
		}

	
	
	//close the window after dialog box is closed
	selectWindow(list[i]);
	close();
	}
}


function batchfunction()
{

//define and setup
bleach_timepoint =   4;     //frame number that shows first bleached image
bleachsize       =  10;     //diameter in pixels
run("Set Measurements...", "  mean display redirect=None decimal=2");

//adaptive mode searches for greatest-bleached point and places coords there, 
//otherwise at center of image
adaptive         =  "FALSE";

if(isOpen("Results")){
	selectWindow("Results");
	run("Close"); 
	}
	
//set image stats
stack=File.name;
getDimensions(width, height, channels, slices, frames);
wide=width;
high=height;


if(adaptive=="TRUE"){
	//to determine the most bleached point, we subtract pre from post-bleached slices
	selectImage(stack);
	setSlice(bleach_timepoint-1);
	run("Duplicate...", "title=prebleached");
	
	selectImage(stack);
	setSlice(bleach_timepoint);
	run("Duplicate...", "title=bleached");
	
	//find the bleach point
	run("Calculator Plus", "i1=bleached i2=prebleached operation=[Subtract: i2 = (i1-i2) x k1 + k2] k1=1 k2=0 create");
	selectImage("prebleached");
	close();
	selectImage("bleached");
	close();
	selectImage("Result");
	run("Find Maxima...", "noise=100 output=[Point Selection]");
	
	//make a ROI before measuring
	getSelectionCoordinates(xCoord,yCoord);
	x=(xCoord[0])-(bleachsize/2);
	y=(yCoord[0])-(bleachsize/2);
	run("Specify...", "width="+bleachsize+" height="+bleachsize+" x="+x+" y="+y+" oval");
	}

else{
	x=(wide/2)-(bleachsize/2);
	y=(high/2)-(bleachsize/2);
	run("Specify...", "width="+bleachsize+" height="+bleachsize+" x="+x+" y="+y+" oval");
	}

waitForUser("move ROI if desired");

no=roiManager("count");
roiManager("add");
selectImage(stack);	
roiManager("Select", no);
roiManager("Multi Measure");

saveAs("Measurements", "C:\\Users\\dkrozelle\\Desktop\\"+stack+"_bgd.xls");
if(File.exists("C:\\Users\\dkrozelle\\Desktop\\"+stack+".xls")){
	selectWindow("Results");
	run("Close"); 
	}
}


